#pragma once
#include "HSLUtilLib2.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Tools\\Tools.hs_"
#include "HSLStrLib.hsl"
#include "C:\\Program Files (x86)\\HAMILTON\\BAREB\\Script\\HamiltonVisualMethodEditor\\HamiltonVisualMethodEditorMethod\\Library\\Commands\\Commands.hs_"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"

namespace LABWARE {
  variable PlateLabwareCategories[];
  variable PlateLoadingLocations[];
  variable PlateNames[];
  variable PlateVolumes[];
  variable PlateSequenceStrings[];
  variable PlateLabwareNames[];
  variable PlateLabwareTypes[];
  variable PlateLidSequenceStrings[];
  function GetAllSequenceStrings( variable & SequenceStrings[] ) void ;
  function GetPlateLabwareCategory( variable & PlateNamesArray[], variable & LabwareCategoriesArray[] ) variable ;
  function GetPlateLabwareName( variable & PlateNamesArray[], variable & LabwareNamesArray[] ) variable ;
  function GetPlateLabwareType( variable & PlateNamesArray[], variable & LabwareTypesArray[] ) variable ;
  function GetPlateLidSequenceString( variable & PlateNamesArray[], variable & LidSequenceStringsArray[] ) variable ;
  function GetPlateLoadingLocation( variable & PlateNamesArray[], variable & PlateLoadingLocationsArray[] ) variable ;
  function GetPlateNames( variable & o_PlateNames[] ) void ;
  function GetPlateSequenceString( variable & PlateNamesArray[], variable & PlateSequenceStringsArray[] ) variable ;
  function GetPlateVolume( variable & PlateNamesArray[], variable & PlateVolumesArray[] ) variable ;
  function Init( variable i_LabwareCommandString ) void ;
  function _InitLibrary() {
    TOOLS::_InitLibrary();
    COMMANDS::_InitLibrary();
  }
  function _ExitLibrary() {
    TOOLS::_ExitLibrary();
    COMMANDS::_ExitLibrary();
  }

  function GetAllSequenceStrings( variable & SequenceStrings[] ) void {
    private variable Counter;
    private variable NumLabware;
    SequenceStrings.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        SequenceStrings.AddAsLast(PlateLidSequenceStrings.ElementAt( Counter -1));
        SequenceStrings.AddAsLast(PlateSequenceStrings.ElementAt( Counter -1));
      }
    }
  }

  function GetPlateSequenceString( variable & PlateNamesArray[], variable & PlateSequenceStringsArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateSequenceStringsArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateSequenceStringsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateSequenceStringsArray.SetAt(Counter2-1, PlateSequenceStrings.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateVolume( variable & PlateNamesArray[], variable & PlateVolumesArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateVolumesArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateVolumesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateVolumesArray.SetAt(Counter2-1, PlateVolumes.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareType( variable & PlateNamesArray[], variable & LabwareTypesArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareTypesArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareTypesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareTypesArray.SetAt(Counter2-1, PlateLabwareTypes.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareName( variable & PlateNamesArray[], variable & LabwareNamesArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareNamesArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareNamesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareNamesArray.SetAt(Counter2-1, PlateLabwareNames.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLabwareCategory( variable & PlateNamesArray[], variable & LabwareCategoriesArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LabwareCategoriesArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LabwareCategoriesArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LabwareCategoriesArray.SetAt(Counter2-1, PlateLabwareCategories.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLoadingLocation( variable & PlateNamesArray[], variable & PlateLoadingLocationsArray[] ) variable {
    private variable NumLabware;
    private variable Counter;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    PlateLoadingLocationsArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    PlateLoadingLocationsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              PlateLoadingLocationsArray.SetAt(Counter2-1, PlateLoadingLocations.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function GetPlateLidSequenceString( variable & PlateNamesArray[], variable & LidSequenceStringsArray[] ) variable {
    private variable Counter;
    private variable NumLabware;
    private variable Counter2;
    private variable Count;
    private variable NumInputLabware;
    LidSequenceStringsArray.SetSize( 0);
    NumLabware=PlateNames.GetSize();
    NumInputLabware=PlateNamesArray.GetSize();
    LidSequenceStringsArray.SetSize(NumInputLabware);
    Count = 0;
    {
      for(Counter = 0; Counter < NumLabware;)
      {
        Counter = Counter + 1;
        {
          for(Counter2 = 0; Counter2 < NumInputLabware;)
          {
            Counter2 = Counter2 + 1;
            if (PlateNames.ElementAt( Counter -1) == PlateNamesArray.ElementAt( Counter2 -1))
            {
              LidSequenceStringsArray.SetAt(Counter2-1, PlateLidSequenceStrings.ElementAt( Counter -1));
              Count = Count + 1;
            }
          }
        }
      }
    }
    if (Count == NumInputLabware)
    {
      return (Translate("True"));
    }
    else
    {
      return (Translate("False"));
    }
  }

  function Init( variable i_LabwareCommandString ) void {
    private variable Dict[];
    private variable LidSequencesString;
    private variable VolumesString;
    private variable LabwareNamesString;
    private variable LoadingLocationsString;
    private variable LabwareCategoriesString;
    private variable LabwareSequencesString;
    private variable Delimiter;
    private variable LabwareTypesString;
    private variable NamesString;
    COMMANDS::ParseCommandParametersString(i_LabwareCommandString, Dict);
    COMMANDS::GetDictionaryItem(Dict, Translate("Name"), NamesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareSequence"), LabwareSequencesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LidSequence"), LidSequencesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LoadingLocation"), LoadingLocationsString);
    COMMANDS::GetDictionaryItem(Dict, Translate("Volume"), VolumesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareType"), LabwareTypesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareCategory"), LabwareCategoriesString);
    COMMANDS::GetDictionaryItem(Dict, Translate("LabwareName"), LabwareNamesString);
    Delimiter = COMMANDS::GetCommandStringDelimiter();
    TOOLS::ParseDelimitedList(Delimiter, NamesString, PlateNames);
    TOOLS::ParseDelimitedList(Delimiter, LabwareSequencesString, PlateSequenceStrings);
    TOOLS::ParseDelimitedList(Delimiter, VolumesString, PlateVolumes);
    TOOLS::ParseDelimitedList(Delimiter, LabwareTypesString, PlateLabwareTypes);
    TOOLS::ParseDelimitedList(Delimiter, LabwareNamesString, PlateLabwareNames);
    TOOLS::ParseDelimitedList(Delimiter, LabwareCategoriesString, PlateLabwareCategories);
    TOOLS::ParseDelimitedList(Delimiter, LoadingLocationsString, PlateLoadingLocations);
    TOOLS::ParseDelimitedList(Delimiter, LidSequencesString, PlateLidSequenceStrings);
    Util2::Debug::TraceArray(Translate(""), PlateNames);
    Util2::Debug::TraceArray(Translate(""), PlateSequenceStrings);
    Util2::Debug::TraceArray(Translate(""), PlateVolumes);
    Util2::Debug::TraceArray(Translate(""), PlateLabwareTypes);
    Util2::Debug::TraceArray(Translate(""), PlateLabwareNames);
    Util2::Debug::TraceArray(Translate(""), PlateLabwareCategories);
    Util2::Debug::TraceArray(Translate(""), PlateLoadingLocations);
    Util2::Debug::TraceArray(Translate(""), PlateLidSequenceStrings);
  }

  function GetPlateNames( variable & o_PlateNames[] ) void {
    o_PlateNames.SetSize( 0);
    o_PlateNames=PlateNames;
  }
} // library namespace
